PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = builder_ai_dog_revised
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent onam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Sizi Çanakkale Onsekiz Mart Ünviersitesi Psikoloji Bölümü öğrencisi Caner Çetin tarafından yürütülen “Yapay Zeka Destekli Videoların Karar Mekanizmalarına Etkisinin Ölçülmesi” başlıklı araştırmaya davet ediyoruz. Bu araştırmanın amacı izlenilen videoların türünün (yapay zeka ya da insan tarafıdan üretildiği) kişideki karar verme mekanizmasına olan etkisini incelemektir. Araştırmada ilk önce bir video seyredecek ve ardından resim-kelime eşleşmesi testine katılmanız beklenmektedir. Araştırmada sizden tahminen 15 dakika ayırmanız istenmektedir. Araştırmaya sizin dışınızda tahminen 150 kişi katılacaktır. Bu çalışmaya katılmak tamamen gönüllülük esasına dayanmaktadır. Çalışmanın amacına ulaşması için sizden beklenen, bütün soruları eksiksiz, kimsenin baskısı veya telkini altında olmadan, size en uygun gelen cevapları içtenlikle verecek şekilde cevaplamanızdır. Olası bir rahatsızlık hissettiğinide araştırmada her an “esc” tuşuna basarak araştırmadan çekilebilirsiniz. Bu formu okuyup onaylamanız, araştırmaya katılmayı kabul ettiğiniz anlamına gelecektir. Ancak, çalışmaya katılmama veya katıldıktan sonra herhangi bir anda çalışmayı bırakma hakkına da sahipsiniz. Bu çalışmadan elde edilecek bilgiler tamamen araştırma amacı ile kullanılacaktır. 
      wrapWidth = 2
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    KeyboardComponent key_resp
      allowedKeys = "enter",'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baslangıc
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    TextComponent isinma_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Isınma aşamasına hoş geldiniz.
        Devam etmek için boşluk tuşuna basınız
    KeyboardComponent cikis
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine onam_2
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    TextComponent onam_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sizi Çanakkale Onsekiz Mart Ünviersitesi Psikoloji Bölümü öğrencisi Caner Çetin tarafından yürütülen “Yapay Zeka Destekli Videoların Karar Mekanizmalarına Etkisinin Ölçülmesi” başlıklı araştırmaya davet ediyoruz. Bu araştırmanın amacı izlenilen videoların türünün (yapay zeka ya da insan tarafıdan üretildiği) kişideki karar verme mekanizmasına olan etkisini incelemektir. Araştırmada ilk önce bir video seyredecek ve ardından resim-kelime eşleşmesi testine katılmanız beklenmektedir. Araştırmada sizden tahminen 15 dakika ayırmanız istenmektedir.

        Devam etmek için "BOŞLUK" tuşuna basınız.
    KeyboardComponent onam_1_devam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine onam_3
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    TextComponent onam_3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
         Araştırmaya sizin dışınızda tahminen 150 kişi katılacaktır. Bu çalışmaya katılmak tamamen gönüllülük esasına dayanmaktadır. Çalışmanın amacına ulaşması için sizden beklenen, bütün soruları eksiksiz, kimsenin baskısı veya telkini altında olmadan, size en uygun gelen cevapları içtenlikle verecek şekilde cevaplamanızdır. Olası bir rahatsızlık hissettiğinide araştırmada her an “esc” tuşuna basarak araştırmadan çekilebilirsiniz. Bu formu okuyup onaylamanız, araştırmaya katılmayı kabul ettiğiniz anlamına gelecektir. Ancak, çalışmaya katılmama veya katıldıktan sonra herhangi bir anda çalışmayı bırakma hakkına da sahipsiniz. Bu çalışmadan elde edilecek bilgiler tamamen araştırma amacı ile kullanılacaktır.

        Devam etmek için "BOŞLUK" tuşuna basınız.
    KeyboardComponent onam_3_devam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine asama_1
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    TextComponent asama_1_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Asama 1 birazdan başlayacaktır.
        Görev aynı.
  Routine asama_1_st
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    TextComponent fix_asama_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent image_asama_2
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent disp_word_asama_2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $display_word
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    KeyboardComponent res_asama_2
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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  Routine age_and_uni
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Yaşınız nedir?
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      text = Okuduğunuz üniversite nedir? ÇOMÜ ise lütfen sadec ÇOMÜ yazınız.
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  Routine video_asama
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    TextComponent video_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Video izleyeceksiniz
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = False
      movie = ai_dog.mp4
      size = (1, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 320
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    TextComponent movie_devam_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 325
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      text:
        devam etmek için
        "boşluk" tuşuna basınız
    KeyboardComponent video_cıkıs
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 325
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  Routine isinma_st
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent image_isinma
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent disp_word
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $display_word
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    KeyboardComponent isinma_cikis
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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  Routine asama_2
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    TextComponent asama_2_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = asama 2 başlıyor
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  Routine asama_2_st
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    TextComponent fix_asama_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $display_word
    KeyboardComponent asama_2_res
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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  Routine btis
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Katılım gösterdiğiniz için teşekkür ederim. 
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  Routine age
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Yasınız nedir?
        1=18  2=19  3=20  4=21
        5=22  6=23 7=24 8= 25  9=diğer
    KeyboardComponent key_resp_2
      allowedKeys = "1","2","3","4","5","6","7","8","9"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine uni
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Üniversiteniz ÇOMÜ ise "1", değilse "2" seçiniz.
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    KeyboardComponent key_resp_3
      allowedKeys = "1","0"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine age
  Routine uni
  Routine video_asama
  Routine baslangıc
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ısınma_kosullar.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/tshirt.jpg', 'display_word': 'TİŞÖRT', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/tshirt.jpg', 'display_word': 'BİLGİSAYAR', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/phone.jpg', 'display_word': 'TELEFON', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/phone.jpg', 'display_word': 'TİŞÖRT', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/computer.jpg', 'display_word': 'BİLGİSAYAR', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/computer.jpg', 'display_word': 'TELEFON', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2}]
    Routine isinma_st
  LoopTerminator trials
  Routine asama_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = kosullar.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2}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
    Routine asama_1_st
  LoopTerminator trials_2
  Routine asama_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = kosullar_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'PEÇETE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'PEÇETE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3}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
    Routine asama_2_st
  LoopTerminator trials_3
  Routine btis
