PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = craft
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine baslangıc
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    TextComponent isinma_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Isınma aşamasına hoş geldiniz.

        Bu aşamda sizden doğru resim-kelime eşleşmesi için "F",
        yanlış resim-kelime eşleşmesi için "J" tuşlarına mümkün olan en kısa sürede basmanız beklenmektedir.

        Kendinizi hazır hissettiğinizde lütfen "boşluk" tuşuna basarak ısınma aşamasına geçiniz.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine asama_1
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    TextComponent asama_1_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Isınma aşamasını tamamladınız.

        Birazdan testin ilk aşamasına katılım sağlayacaksınız.

        Lütfen doğru resim-kelime eşleşmeleri için "F", yanlış kelime resim eşleşmeleri için "J" tuşuna mümkün olan en kısa sürede basınız.

        Hazır olduğunuzda "boşluk" tuşuna basarak test aşamasına geçiş sağlayabilirsiniz.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine asama_1_st
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    TextComponent fix_asama_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent disp_word_asama1
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_asama1
      fillColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (0.19, 0.03)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent disp_word_asama_1
      color = -1.0000, 0.8500, -1.0000
      font = Arial Black
      letterHeight = 0.025
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $display_word
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    KeyboardComponent res_asama_2
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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  Routine age_and_uni
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Yaşınız nedir?
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      text = Okuduğunuz üniversite nedir? ÇOMÜ ise lütfen sadec ÇOMÜ yazınız.
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  Routine video_asama
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    TextComponent video_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Şimdi yaklaşık 3 dakika sürecek bir video izleyecekseniz. Lütfen dikkatle videoyu seyrediniz. 
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = True
      movie = video.mp4
      size = (1, 0.5)
      startVal [time (s)] = 5
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  Routine isinma_st
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent image_isinma
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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    PolygonComponent polygon
      fillColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (0.19, 0.03)
      startVal [time (s)] = 1
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    TextComponent disp_word
      color = -1.0000, 0.8500, -1.0000
      font = Arial Black
      letterHeight = 0.025
      startVal [time (s)] = 1
      text [set every repeat] = $display_word
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    KeyboardComponent isinma_cikis
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine asama_2
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    TextComponent asama_2_bilgi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Birazdan testin ikinci aşamasına katılım sağlayacaksınız.

        Lütfen doğru resim-kelime eşleşmeleri için "F", yanlış kelime resim eşleşmeleri için "J" tuşuna mümkün olan en kısa sürede basınız.

        Hazır olduğunuzda "boşluk" tuşuna basarak test aşamasına geçiş sağlayabilirsiniz.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine asama_2_st
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    TextComponent fix_asama_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_asama_2
      fillColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (0.19, 0.03)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent disp_word_asama2
      color = -1.0000, 0.8500, -1.0000
      font = Arial Black
      letterHeight = 0.025
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $display_word
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    KeyboardComponent asama_2_res
      allowedKeys = "f","j"
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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  Routine btis
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Deney sonlanmıştır.

        Katılım gösterdiğiniz için teşekkür ederim.
  Routine age
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Yaşınız nedir?
        Lütfen yaşınıza karşılık gelen numaralara basınız. Lütfen klavyenizin üst tarafında yer alan numaraları kullanınız.

        1=18   2=19   3=20   4=21
        5=22   6=23  7=24  8=25
        9=diğer
    KeyboardComponent key_resp_2
      allowedKeys = "1","2","3","4","5","6","7","8","9"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine uni
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lütfen Çanakkale Onsekiz Mart Üniversitesi (ÇOMÜ)'de öğrenciyseniz "1", değilseniz "2"ye  basınız.

        Lütfen klavyenizin üst tarafında yer alan numaralı tuşları kullanınız.
    KeyboardComponent key_resp_3
      allowedKeys = "1","0"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video_bitis_bilgi
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Video sonlanmıştır. Lütfen devam etmek için "boşluk" tuşuna basınız. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine age
  Routine uni
  Routine video_asama
  Routine video_bitis_bilgi
  Routine baslangıc
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ısınma_kosullar.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/tshirt.jpg', 'display_word': 'TİŞÖRT', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/tshirt.jpg', 'display_word': 'BİLGİSAYAR', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/phone.jpg', 'display_word': 'TELEFON', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/phone.jpg', 'display_word': 'TİŞÖRT', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/computer.jpg', 'display_word': 'BİLGİSAYAR', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/computer.jpg', 'display_word': 'TELEFON', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2}]
    Routine isinma_st
  LoopTerminator trials
  Routine asama_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = kosullar.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 2},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 2}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
    Routine asama_1_st
  LoopTerminator trials_2
  Routine asama_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = kosullar_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'pic/dog.jpg', 'display_word': 'KÖPEK', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/dog.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'AMPUL', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'PEÇETE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/lamp.jpg', 'display_word': 'ÇANTA', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'ÇANTA', 'condition_type': 'congruent', 'correct_key': 'f', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'AMPUL', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'TENCERE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3},
      {'imageFile': 'pic/bag.jpg', 'display_word': 'PEÇETE', 'condition_type': 'incongruent', 'correct_key': 'j', 'block': 3}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
    Routine asama_2_st
  LoopTerminator trials_3
  Routine btis
